PsychoPy2experiment version="2022.2.4"
Settings
  Data filename = u'data/%s_%s_%s' % (expInfo['session'], expInfo['day'], expName)
  Experiment info = {'day': '0', 'session': '0'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = novel_scenes
  keyboardBackend = ioHub
  logging level = data
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Routines
  Routine intro_screen
    KeyboardComponent start_seven
      allowedKeys = '7'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Auto->JS
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      Before Experiment:
        import random as random
      Begin Experiment:
        # UDPATE FOR EACH RUN TO GET NEW SET OF IMAGES
        overall_run = 10


        blocks = 12
        images_per_block = 8
        image_duration = 3

        trial = 0



        # 0 = repeat, 1 = novel
        block_order = [0,0,0,0,0,0,1,1,1,1,1,1]
        random.shuffle(block_order)
        block_track = 0

        repeated_indoor_master = range(2, 21)
        repeated_outdoor_master = range(1, 21)

        novel_indoor_master = range(21, 266)
        novel_outdoor_master = range(21, 671)

        # set 2 repeated images for this run
        repeated_indoor = repeated_indoor_master[overall_run -1]
        repeated_outdoor = repeated_outdoor_master[overall_run -1]

        # repeated image paths
        in_path = 'indoor/scene_' + str(repeated_indoor) + '.jpg'
        out_path = 'outdoor/scene_' + str(repeated_outdoor) + '.jpg'

        repeated_block = [in_path, in_path, in_path, in_path, out_path, out_path, out_path, out_path]

        # set 24 novel indoor and outdoor images for this run
        novel_indoor = novel_indoor_master[(overall_run-1)*24:(overall_run)*24]
        novel_outdoor = novel_outdoor_master[(overall_run-1)*24:(overall_run)*24]

        nip = []
        for i in novel_indoor:
            nip.append('indoor/scene_' + str(i) + '.jpg')

        nop = []
        for i in novel_outdoor:
            nop.append('outdoor/scene_' + str(i) + '.jpg')


        # set up 6 blocks of novel scenes
        # go back and clean up later, leaving hacky for now
        nov_block_1 = [nop[0], nop[1], nop[2], nop[3], nip[0], nip[1], nip[2], nip[3]]
        nov_block_2 = [nop[4], nop[5], nop[6], nop[7], nip[4], nip[5], nip[6], nip[7]]
        nov_block_3 = [nop[8], nop[9], nop[10], nop[11], nip[8], nip[9], nip[10], nip[11]]
        nov_block_4 = [nop[12], nop[13], nop[14], nop[15], nip[12], nip[13], nip[14], nip[15]]
        nov_block_5 = [nop[16], nop[17], nop[18], nop[19], nip[16], nip[17], nip[18], nip[19]]
        nov_block_6 = [nop[20], nop[21], nop[22], nop[23], nip[20], nip[21], nip[22], nip[23]]

        novel_blocks = [nov_block_1, nov_block_2, nov_block_3, nov_block_4, nov_block_5, nov_block_6]
        novel_track = 0
    PolygonComponent background
      fillColor = white
      shape = rectangle
      size = (2, 1)
      startVal [time (s)] = 0.0
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    TextComponent start_text
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Press '7' to start experiment
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  Routine display_image
    PolygonComponent background_2
      fillColor = white
      shape = rectangle
      size = (2, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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    ImageComponent image
      image [set every repeat] = $image_path
      size = (0.75, 0.75)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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    CodeComponent code_7
      Code Type = Auto->JS
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      Begin Routine:
        thisExp.addData('image', image_path)
        thisExp.addData('onset', globalClock.getTime())
        thisExp.addData('trial', trial)
        thisExp.addData('block_type', block_type)
        thisExp.addData('block_num', (block_track +1))
      End Routine:
        trial += 1
        thisExp.addData('offset', globalClock.getTime())
        thisExp.addData('response', key_resp.keys)
        thisExp.addData('correct', key_resp.corr)
        thisExp.nextEntry()
    KeyboardComponent key_resp
      allowedKeys [set every repeat] = '1', '2'
      correctAns = $correct
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      storeCorrect = True
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    TextComponent text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = (0, -0.42)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      text = 1 - Indoor                          2 - Outdoor
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  Routine wait
    KeyboardComponent catch_five
      allowedKeys = '5'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    PolygonComponent wait_background
      fillColor = white
      shape = rectangle
      size = (2, 1)
      startVal [time (s)] = 0.0
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    PolygonComponent black_cross
      fillColor = black
      lineColor = black
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    CodeComponent code_6
      Code Type = Auto->JS
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      Begin Routine:
        thisExp.addData('seven_received', globalClock.getTime())
  Routine fixation
    PolygonComponent fixation_background
      fillColor = white
      shape = rectangle
      size = (2, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 12
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    PolygonComponent red_cross
      fillColor = 1.0000, -1.0000, -1.0000
      lineColor = 1.0000, -1.0000, -1.0000
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 12
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        thisExp.addData('five_received', globalClock.getTime())
  Routine define_block
    CodeComponent define_block_2
      Code Type = Auto->JS
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      Begin Routine:
        block = block_order[block_track]

        # if repeat block
        if block == 0:
            im_paths = repeated_block
            random.shuffle(im_paths)
            block_type = 'repeat'

        # if novel block
        if block == 1:
            novel_block = novel_blocks[novel_track]
            im_paths = novel_block
            random.shuffle(im_paths)
            novel_track += 1
            block_type = 'novel'

        image_track = 0
  Routine end_block_update
    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        block_track += 1
  Routine set_image
    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Routine:
        image_path = im_paths[image_track]
        image_track += 1

        if 'indoor' in image_path:
            correct = '1'
        if 'outdoor' in image_path:
            correct = '2'
  Routine show_cross
    PolygonComponent blank_back_cross
      fillColor = white
      shape = rectangle
      size = (2, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    PolygonComponent wait_cross
      fillColor = black
      lineColor = black
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine block_update
    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Routine:
        block_track += 1
  Routine end_fixation
    PolygonComponent fixation_background_2
      fillColor = white
      shape = rectangle
      size = (2, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 12
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    PolygonComponent red_cross_2
      fillColor = 1.0000, -1.0000, -1.0000
      lineColor = 1.0000, -1.0000, -1.0000
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 12
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    CodeComponent code_8
      Code Type = Auto->JS
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      Begin Routine:
        thisExp.addData('five_received', globalClock.getTime())
Flow
  Routine intro_screen
  Routine wait
  Routine fixation
  LoopInitiator blocks loopType="TrialHandler"
    loopType = random
    nReps = 12
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    Routine define_block
    LoopInitiator image_presentations loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = images_per_block
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      Routine set_image
      Routine display_image
      Routine show_cross
    LoopTerminator image_presentations
    Routine block_update
  LoopTerminator blocks
  Routine end_fixation
